---
API: 2.1
OpenSesame: 3.3.3
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title fns_lab
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/emmar/Google Drive/01-AI_RUG/2-IB/FunctionalNeuroscience/Lab/1"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define loop block_loop
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first no
	set break_if never
	setcycle 0 dist_img d1
	setcycle 0 dist_text "Three dogs are each carrying two tires"
	setcycle 0 correct_response y
	setcycle 1 dist_img d2
	setcycle 1 dist_text "Three dogs are each holding two bones"
	setcycle 1 correct_response y
	setcycle 2 dist_img c1
	setcycle 2 dist_text "Three dogs are each carrying two tires"
	setcycle 2 correct_response n
	setcycle 3 dist_img c2
	setcycle 3 dist_text "Three dogs are each holding two bones"
	setcycle 3 correct_response n
	setcycle 4 dist_img d1
	setcycle 4 dist_text "Three dogs are carrying two tires"
	setcycle 4 correct_response n
	setcycle 5 dist_img d2
	setcycle 5 dist_text "Three dogs are holding two bones"
	setcycle 5 correct_response n
	setcycle 6 dist_img c1
	setcycle 6 dist_text "Three dogs are carrying two tires"
	setcycle 6 correct_response y
	setcycle 7 dist_img c2
	setcycle 7 dist_text "Three dogs are holding two bones"
	setcycle 7 correct_response y
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback always
	run block_loop always
	run feedback always

define form_text_display end
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started always
	run welcome always
	run instruction always
	run practice_card always
	run practice_loop always
	run main_intro always
	run experiment_loop always
	run thankyou always

define loop experiment_loop
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 experiment_trial main
	run block_sequence

define feedback feedback
	set reset_variables yes
	set duration 3500
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Accuracy: [acc]<br />Average Repsonse Time: [avg_rt]" x=0 y=0 z_index=0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad img_text
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[dist_text]" x=0 y=224 z_index=0
	draw image center=1 file="[dist_img].png" scale=0.5 show_if=always x=0 y=-128 z_index=0

define sketchpad instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="This is a demo experiment!<br /><br />You will be shown a picture and a text describing it.<br /><br />Press 'y' if you agree and 'n' if you disagree." x=0 y=0 z_index=0
	draw textline center=1 color="#ffff00" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue!" x=0 y=192 z_index=0

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "y;n"

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log dist_img
	log dist_text
	log response
	log response_time
	log experiment_trial

define sketchpad main_intro
	set duration 3500
	set description "Displays stimuli"
	draw textline center=1 color="#8bd100" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="It was pretty easy right? Let's do the main experiment!" x=0 y=0 z_index=0

define sketchpad practice_card
	set duration 2000
	set description "Displays stimuli"
	draw textline center=1 color="#8bd100" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Let's have a quick practice session!" x=0 y=0 z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 experiment_trial practice
	run block_sequence

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad thankyou
	set duration 2500
	set description "Displays stimuli"
	draw textline center=1 color="#1cfcff" font_bold=no font_family=mono font_italic=no font_size=34 html=yes show_if=always text="That's all folks! <br /><br />Thanks for participating :) " x=0 y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run img_text always
	run keyboard_response always
	run logger always

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Functional Neuroscience Lab 1" x=0 y=0 z_index=0

